PsychoPy2experiment version="2026.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = NaturalisticfMRI
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Movie1
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    MovieComponent movie1
      backend = ffpyplayer
      forceEndRoutine = True
      movie = StressRelief.mp4
      size = (2, 1)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        globalClock.reset()
        seekDone = False
        seekClock = core.Clock()
        movie1.seek(stimStart)
        print("Movie 1 (Stress Relief) started at TR-aligned time.")
      Each Frame:
        from psychopy import event
        if not seekDone and seekClock.getTime() > 0.2:
            movie1.seek(stimStart)
            seekDone = True

        if 'space' in event.getKeys():
            actualMovieTime = stimStart + t
            print(f"Movie interrupted at {actualMovieTime:.2f} s.")
            thisExp.addData('movieStopTime', actualMovieTime)
            thisExp.saveAsWideText(thisExp.dataFileName + '.csv')
            core.quit()

        if 'escape' in event.getKeys():
            actualMovieTime = stimStart + t
            print(f"Movie interrupted at {actualMovieTime:.2f} s.")
            thisExp.addData('movieStopTime', actualMovieTime)
            thisExp.saveAsWideText(thisExp.dataFileName + '.csv')
            core.quit()
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Movie2
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    MovieComponent movie2
      backend = ffpyplayer
      forceEndRoutine = True
      movie = Niagara.mp4
      size = (2, 1)
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        globalClock.reset()
        print("Movie 2 (Niagara) started at TR-aligned time.")
  Routine WaitForScanner2
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        TR = 0.8  # seconds (set scanner TR here)
        nDummy = 0  # number of dummy scans to skip
        trigger_count = 0
      Begin Routine:
        trigger_count = 0
        event.clearEvents()
      Each Frame:
        keys = event.getKeys(['5'])

        if len(keys):
            trigger_count += 1
            print(f"Trigger {trigger_count}")

            if trigger_count >= 1:
                globalClock.reset()
                continueRoutine = False

        t = globalClock.getTime()
        print(f"Trigger time recorded at {t:.3f}s")
    KeyboardComponent ScannerTrigger2
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine WaitForScanner
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    KeyboardComponent ScannerTrigger
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        TR = 0.8  # seconds (set scanner TR here)
        nDummy = 0  # number of dummy scans to skip
        trigger_count = 0
      Begin Routine:
        trigger_count = 0
        event.clearEvents()
      Each Frame:
        keys = event.getKeys(['5'])

        if len(keys):
            trigger_count += 1
            print(f"Trigger {trigger_count}")

            if trigger_count >= nDummy:
                globalClock.reset()  # time-lock here
                continueRoutine = False

        t = globalClock.getTime()
        print(f"Trigger time recorded at {t:.3f}s")
      End Routine:
        print("Scanner sync complete.")
  Routine Init
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    CodeComponent code_5
      Code Type = Auto->JS
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      Before Experiment:
        # Designated start code
        expInfo = {'Movie Start Time (sec)': '0'}
        dlg = gui.DlgFromDict(expInfo)
        if not dlg.OK:
            core.quit()
        stimStart = float(expInfo['Movie Start Time (sec)'])
      Begin Experiment:
        from psychopy import gui, core, event

        # Global clock
        globalClock = core.Clock()

        # MRI settings
        TR = 0.8
        nDummy = 0
        trigger_count = 0

        # Clear keyboard buffer
        event.clearEvents()

        #Completion Verification
        print("Init routine complete.")
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
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      text:
        Welcome to the Neurological and Environmental Risks for Brain Aging and Network Activity (NERBANA) study by Brain Circuits Lab.

        We will begin your scan shortly. Lay back, relax, and try not to move. Enjoy the film!
  Routine HardStop
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press SPACE to continue to next stimulus. 
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Init
  Routine WaitForScanner
  Routine Movie1
